PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1366, 768]
  expName = Dual_para
  keyboardBackend = ioHub
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Routines
  Routine Instruccions
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    TextComponent Instrucccions
      letterHeight = 36
      startVal [time (s)] = 0.0
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      text:
        A continuación presione la barra espaciadora para comenzar el experimento.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Circle
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #import random
        from numpy import random
        import math
        import psychopy.logging as log

        # Function to calculate distance between two points
        def distance(point1, point2):
            return ((point1[0] - point2[0])**2 + (point1[1] - point2[1])**2)**0.5

        def rad2grad(rad):
            return rad*180/math.pi

        def grad2rad(grad):
            return grad*math.pi/180

        def angle2origin (pos):
            if pos[0] * pos[1] >= 0:
                angle = math.atan(pos[1] / pos[0]) + math.pi
            else:
                angle = math.atan(pos[1] / pos[0])
            return angle

        # Define size of the circle
        circle_radius = 10
        circle_speed = 15
        circle_pos = [0,0]
        circle_direction = random.uniform(0, 2 * math.pi)  # Initial direction (random)
        angle_uncertainty = math.pi/2

        cross_color = "white"

        # Define boundaries
        boundary_x_min = -win.size[0] / 2 + circle_radius
        boundary_x_max = win.size[0] / 2 - circle_radius
        boundary_y_min = -win.size[1] / 2 + circle_radius
        boundary_y_max = win.size[1] / 2 - circle_radius

        # Define la duración del estímulo
        stimulus_duration = 0.5

        # promedio de las duraciones entre estimulos
        between_stimuli = 2.0

        # define square_pos
        square_pos = (0,0)

        # proportion of x in list of all letters
        n_x = 1
      Begin Routine:
        next_flash_time = core.getTime() + stimulus_duration + random.normal(loc=between_stimuli, scale=1) + 1 # Initial flash time

        stimulus = "X"
        all_letters = ["M", "N", "Y", "A", "U", "H"]

        all_letters = all_letters + (["X"] * n_x)
        print (all_letters)

        last_flash_time = None
        offset_time = core.getTime() + stimulus_duration

        # Set the mouse at the center of the screen
        mouse.setPos([0,0])

        # Log the trial number
        log.exp(f"Trial begin: {trials.thisN+1}")
      Each Frame:
        # Calculate the new position based on speed and direction
        circle_pos[0] += circle_speed * math.cos(circle_direction)
        circle_pos[1] += circle_speed * math.sin(circle_direction)


        # Check for collisions with boundaries
        if circle_pos[0] <= boundary_x_min or circle_pos[0] >= boundary_x_max:
            circle_direction = math.pi - circle_direction
        if circle_pos[1] <= boundary_y_min or circle_pos[1] >= boundary_y_max:
            circle_direction = -circle_direction

        # Randomly adjust speed and direction
        # chance of changing direction on every frame
        if random.random() < 0.2:  # 20% chance of speed change on every frame
            # circle_speed = random.uniform(5, 20)
            circle_direction += random.uniform(-angle_uncertainty/2, angle_uncertainty/2)

        mouse_pos = mouse.getPos()
        dist = distance(mouse_pos, circle.pos)
        log.exp(f"Distance = {dist}")

        # Update figure color based on distance (adjust the values)
        # if dist < 100:
            # circle.fillColor = "green"
        # elif dist < 200:
            #circle.fillColor = "yellow"
        # else:
            # circle.fillColor = "red"

        # Update figure color based on distance (adjust the values)
        if dist < 100:
            square.borderColor = "limegreen"
        elif dist < 200:
            square.borderColor = "yellow"
        else:
            square.borderColor = "red"

        # print(stimulus)

        # Check for fixation cross flash
        if core.getTime() >= next_flash_time:
            last_flash_time = next_flash_time
            stimulus = random.choice(all_letters)
            win.flip()
            log.exp(f"New stimulus letter: {stimulus}")
            next_flash_time = core.getTime() + stimulus_duration + random.normal(loc=between_stimuli, scale=1)  # Schedule the next flash
            offset_time = last_flash_time + stimulus_duration
            print(offset_time)

        if core.getTime() >= offset_time:
           stimulus = ""
           win.flip()
           log.exp(f"Removed stimulus letter")

        # Check square new position bassed of mouse direction
        square_pos = mouse.getPos()
    PolygonComponent circle
      fillColor = white
      pos [set every frame] = circle_pos
      shape = circle
      size = (circle_radius*2, circle_radius*2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent fixation_cross
      color [set every frame] = $cross_color
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextComponent Letter
      letterHeight = 48
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 59
      text [set every frame] = $stimulus
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    PolygonComponent square
      fillColor = transparent
      pos [set every frame] = square_pos
      shape = regular polygon...
      size = (40, 40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine Blank
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    TextComponent Blank_1
      letterHeight = 36
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Instruction_2
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    TextComponent text
      letterHeight = 36
      startVal [time (s)] = 0.0
      text = Sigue el circulo con el mouse 
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent Terminado
      letterHeight = 36
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End
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  Routine Welcome_screen__2
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    TextComponent Welcome
      letterHeight = 36
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Bienvenido 
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  Routine NasaTLX
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    TextComponent text_mental_demand
      letterHeight = 48
      pos = (-480, 400)
      startVal [time (s)] = 0.0
      text = Exigencia mental
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    SliderComponent slider_mental_demand
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (-480, 270)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_fisical_demand
      letterHeight = 48
      pos = (-480, 80)
      startVal [time (s)] = 0.0
      text = Exigencia física
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    SliderComponent slider_fisical_demand
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (-480, -70)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_temporal_demand
      letterHeight = 48
      pos = (-480, -270)
      startVal [time (s)] = 0.0
      text = Exigencia temporal
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    SliderComponent sider_temporal_demand
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (-480, -360)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_effort_demand
      letterHeight = 48
      pos = (480, 400)
      startVal [time (s)] = 0.0
      text = Exigencia eficiencia
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    SliderComponent slider_effort_demand
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (480, 270)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_performance_demand
      letterHeight = 48
      pos = (480, 80)
      startVal [time (s)] = 0.0
      text = Exigencia rendimiento
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    SliderComponent slider_performance_demand
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (480, -70)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    TextComponent text_frustation_demand
      letterHeight = 48
      pos = (480, -270)
      startVal [time (s)] = 0.0
      text = Exigencia frustración
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    SliderComponent slider_frustation_demand
      forceEndRoutine = False
      granularity = 1
      labels = ("Baja", "", "Alta")
      letterHeight = 36
      pos = (480, -360)
      size = (480, 10)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, 0, 10)
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome_screen__2
  Routine Instruccions
  Routine Blank
  Routine Instruction_2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Circle
    Routine NasaTLX
  LoopTerminator trials
  Routine End
